<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:UclOpenFreeingVisionBenchmark;assembly=Extensions"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:p2="clr-namespace:OpenCV.Net;assembly=OpenCV.Net"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:aruco="clr-namespace:Bonsai.Aruco;assembly=Bonsai.Aruco"
                 xmlns:p3="clr-namespace:UclOpen.Core;assembly=UclOpen.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="RigPath" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ReadSchemas</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Path" DisplayName="RigPath" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:ReadAllText">
                <io:Path>..\local\UclOpenFreeingVisionBenchmarkRig.json</io:Path>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RawRigSchema</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LoadSchemas</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawRigSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:UclOpenFreeingVisionBenchmarkRig" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RigSchema</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>BehaviorBoard</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>BehaviorBoard.PortName</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="PortName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="UclOpen.Devices:BehaviorBoard.BehaviorBoard.bonsai">
              <CommandsSubjectName>BehaviorCommands</CommandsSubjectName>
              <PortName>COM3</PortName>
              <DumpRegisters>true</DumpRegisters>
              <Heartbeat>Disabled</Heartbeat>
              <EventsSubjectName>BehaviorEvents</EventsSubjectName>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Cameras</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>RigSchema</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MemberSelector">
                <Selector>TrackCamera.SerialNumber</Selector>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="SerialNumber" />
                </PropertyMappings>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MemberSelector">
                <Selector>TrackCamera.ExposureTime</Selector>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="ExposureTime" />
                </PropertyMappings>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MemberSelector">
                <Selector>TrackCamera.Binning</Selector>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="Binning" />
                </PropertyMappings>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="IncludeWorkflow" Path="UclOpen.Devices:TriggeredSpinnaker.bonsai">
                <ExposureTime>1000</ExposureTime>
                <Gain>0</Gain>
                <Binning>2</Binning>
                <SerialNumber>25170682</SerialNumber>
                <ColorProcessing>Default</ColorProcessing>
                <CameraTriggerEventsSubjectName>Camera0TriggerEvents</CameraTriggerEventsSubjectName>
                <FrameEventsSubjectName>FrameEventsTrackCam</FrameEventsSubjectName>
              </Builder>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>SubjectCamera.SerialNumber</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="SerialNumber" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>SubjectCamera.ExposureTime</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ExposureTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>SubjectCamera.Binning</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Binning" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="UclOpen.Devices:TriggeredSpinnaker.bonsai">
              <ExposureTime>2000</ExposureTime>
              <Gain>0</Gain>
              <Binning>2</Binning>
              <SerialNumber>25224819</SerialNumber>
              <ColorProcessing>Default</ColorProcessing>
              <CameraTriggerEventsSubjectName>OneShotFrameTrigger</CameraTriggerEventsSubjectName>
              <FrameEventsSubjectName>FrameEventsSubjectCam</FrameEventsSubjectName>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="0" To="5" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="7" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="7" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source3" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="8" To="11" Label="Source1" />
            <Edge From="8" To="13" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="15" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="15" Label="Source2" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source3" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>A</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="beh:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="beh:CreateOutputSetPayload">
          <beh:OutputSet>DO1</beh:OutputSet>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>BehaviorCommands</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT0.1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="beh:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="beh:CreateOutputClearPayload">
          <beh:OutputClear>DO1</beh:OutputClear>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>BehaviorCommands</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>BehaviorEvents</Name>
      </Expression>
      <Expression xsi:type="beh:FilterRegister">
        <harp:FilterType>Exclude</harp:FilterType>
        <harp:Register xsi:type="beh:AnalogData" />
      </Expression>
      <Expression xsi:type="beh:Parse">
        <harp:Register xsi:type="beh:TimestampedOutputSet" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Skip">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>OneShotFrameTrigger</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>FrameEventsSubjectCam</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.Image</Selector>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Screen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Width" Selector="Screen.WindowWidth" />
                <Property Name="Height" Selector="Screen.WindowHeight" />
                <Property Name="TargetRenderFrequency" Selector="Screen.TargetRenderFrequency" />
                <Property Name="TargetUpdateFrequency" Selector="Screen.TargetUpdateFrequency" />
                <Property Name="DisplayDevice" Selector="Screen.DisplayIndex" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateWindow">
                <gl:Width>1920</gl:Width>
                <gl:Height>1080</gl:Height>
                <gl:VSync>Off</gl:VSync>
                <gl:SwapSync>false</gl:SwapSync>
                <gl:ClearColor>White</gl:ClearColor>
                <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                <gl:CursorVisible>true</gl:CursorVisible>
                <gl:Location xsi:nil="true" />
                <gl:WindowBorder>Resizable</gl:WindowBorder>
                <gl:WindowState>Fullscreen</gl:WindowState>
                <gl:DisplayDevice>Second</gl:DisplayDevice>
                <gl:TargetRenderFrequency>360</gl:TargetRenderFrequency>
                <gl:TargetUpdateFrequency>360</gl:TargetUpdateFrequency>
                <gl:RenderState />
                <gl:GraphicsMode>
                  <gl:ColorFormat>
                    <gl:Red>8</gl:Red>
                    <gl:Green>8</gl:Green>
                    <gl:Blue>8</gl:Blue>
                    <gl:Alpha>8</gl:Alpha>
                  </gl:ColorFormat>
                  <gl:Depth>16</gl:Depth>
                  <gl:Stencil>0</gl:Stencil>
                  <gl:Samples>0</gl:Samples>
                  <gl:AccumulatorFormat>
                    <gl:Red>0</gl:Red>
                    <gl:Green>0</gl:Green>
                    <gl:Blue>0</gl:Blue>
                    <gl:Alpha>0</gl:Alpha>
                  </gl:AccumulatorFormat>
                  <gl:Buffers>2</gl:Buffers>
                  <gl:Stereo>false</gl:Stereo>
                </gl:GraphicsMode>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:TextureResources">
                <gl:Textures>
                  <gl:TextureConfiguration xsi:type="gl:ImageTexture">
                    <gl:Name>aruco-1</gl:Name>
                    <gl:Width xsi:nil="true" />
                    <gl:Height xsi:nil="true" />
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Linear</gl:MinFilter>
                    <gl:MagFilter>Linear</gl:MagFilter>
                    <gl:FileName>..\markers\aruco-1-100.png</gl:FileName>
                    <gl:ColorType>Unchanged</gl:ColorType>
                    <gl:FlipMode>Vertical</gl:FlipMode>
                  </gl:TextureConfiguration>
                  <gl:TextureConfiguration xsi:type="gl:ImageTexture">
                    <gl:Name>aruco-2</gl:Name>
                    <gl:Width xsi:nil="true" />
                    <gl:Height xsi:nil="true" />
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Linear</gl:MinFilter>
                    <gl:MagFilter>Linear</gl:MagFilter>
                    <gl:FileName>..\markers\aruco-2-100.png</gl:FileName>
                    <gl:ColorType>Unchanged</gl:ColorType>
                    <gl:FlipMode>Vertical</gl:FlipMode>
                  </gl:TextureConfiguration>
                  <gl:TextureConfiguration xsi:type="gl:ImageTexture">
                    <gl:Name>aruco-100</gl:Name>
                    <gl:Width xsi:nil="true" />
                    <gl:Height xsi:nil="true" />
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Linear</gl:MinFilter>
                    <gl:MagFilter>Linear</gl:MagFilter>
                    <gl:FileName>..\markers\aruco-100-100.png</gl:FileName>
                    <gl:ColorType>Unchanged</gl:ColorType>
                    <gl:FlipMode>Vertical</gl:FlipMode>
                  </gl:TextureConfiguration>
                  <gl:TextureConfiguration xsi:type="gl:ImageTexture">
                    <gl:Name>aruco-199</gl:Name>
                    <gl:Width xsi:nil="true" />
                    <gl:Height xsi:nil="true" />
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Linear</gl:MinFilter>
                    <gl:MagFilter>Linear</gl:MagFilter>
                    <gl:FileName>..\markers\aruco-199-100.png</gl:FileName>
                    <gl:ColorType>Unchanged</gl:ColorType>
                    <gl:FlipMode>Vertical</gl:FlipMode>
                  </gl:TextureConfiguration>
                </gl:Textures>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="res:LoadResources" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RenderFrame" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.CubemapView.bonsai">
              <Eye>
                <X>0</X>
                <Y>0</Y>
                <Z>0</Z>
              </Eye>
              <NearClip>0.1</NearClip>
              <FarClip>200</FarClip>
              <Light>
                <X>0</X>
                <Y>0</Y>
                <Z>0</Z>
              </Light>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>DrawCall</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RenderCubemap">
                <gl:RenderState />
                <gl:ClearColor>White</gl:ClearColor>
                <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                <gl:FaceSize xsi:nil="true" />
                <gl:InternalFormat>Rgb</gl:InternalFormat>
                <gl:MinFilter>Linear</gl:MinFilter>
                <gl:MagFilter>Linear</gl:MagFilter>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Tuple(p2:Point3d,p2:Point3d)">
              <rx:Name>ViewOffset</rx:Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:CreatePoint3d">
                <cv:X>0</cv:X>
                <cv:Y>0</cv:Y>
                <cv:Z>0</cv:Z>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:CreatePoint3d">
                <cv:X>0</cv:X>
                <cv:Y>0</cv:Y>
                <cv:Z>0</cv:Z>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Rotation" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Translation" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>ArucoCalibration.ViewWidth</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Width" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>ArucoCalibration.ViewHeight</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Height" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
              <Width>0.596841</Width>
              <Height>0.335723042</Height>
              <Rotation>
                <X>0</X>
                <Y>0</Y>
                <Z>0</Z>
              </Rotation>
              <Translation>
                <X>0</X>
                <Y>0</Y>
                <Z>0</Z>
              </Translation>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
              <X>0</X>
              <Y>0</Y>
              <Width>1</Width>
              <Height>1</Height>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>PostDrawing</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>TimeStep.ElapsedRealTime</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>1/ it</scr:Expression>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PostDrawing</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>ArucoCalibration.ExtentY</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ExtentX" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>ArucoCalibration.ExtentY</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ExtentY" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>ArucoCalibration.ExtentY</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="LocationX" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawImage.bonsai">
              <TextureName>aruco-1</TextureName>
              <ExtentX>0.5957291</ExtentX>
              <ExtentY>0.5957291</ExtentY>
              <LocationX>0.5957291</LocationX>
              <LocationY>0</LocationY>
              <Layer>0</Layer>
              <Angle>0</Angle>
              <ScaleX>1</ScaleX>
              <ScaleY>1</ScaleY>
              <ShiftX>0</ShiftX>
              <ShiftY>0</ShiftY>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="7" To="28" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="25" Label="Source1" />
            <Edge From="11" To="15" Label="Source1" />
            <Edge From="12" To="14" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="14" To="15" Label="Source2" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="15" To="18" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="25" Label="Source2" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="25" Label="Source3" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="20" To="23" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="25" Label="Source4" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source5" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="31" To="39" Label="Source1" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="32" To="35" Label="Source1" />
            <Edge From="32" To="37" Label="Source1" />
            <Edge From="33" To="34" Label="Source1" />
            <Edge From="34" To="39" Label="Source2" />
            <Edge From="35" To="36" Label="Source1" />
            <Edge From="36" To="39" Label="Source3" />
            <Edge From="37" To="38" Label="Source1" />
            <Edge From="38" To="39" Label="Source4" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>FrameEventsSubjectCam</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.Image</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RigSchema</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>ArucoCalibration.ArucoSize</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="MarkerSize" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RigSchema</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>SubjectCamera.CalibrationFile</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="CameraParameters" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="aruco:DetectMarkers">
          <aruco:CameraParameters>./intrinsics/camera_25224819/2026-7-16/2026-7-16T15-11-48_intrinsics.yml</aruco:CameraParameters>
          <aruco:ThresholdMethod>AdaptiveThreshold</aruco:ThresholdMethod>
          <aruco:Param1>5</aruco:Param1>
          <aruco:Param2>2</aruco:Param2>
          <aruco:MinSize>0.04</aruco:MinSize>
          <aruco:MaxSize>1</aruco:MaxSize>
          <aruco:CornerRefinement>Lines</aruco:CornerRefinement>
          <aruco:MarkerSize>0.1</aruco:MarkerSize>
          <aruco:SetYPerpendicular>false</aruco:SetYPerpendicular>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>DetectMarkers</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RigSchema</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>RootPath</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Path" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="UclOpen.Logging:LogController.bonsai">
        <SubjectId>OneShotAruco</SubjectId>
        <SessionId>001</SessionId>
        <Path>../temp_data</Path>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>FrameEventsSubjectCam</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LogData</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" />
              <Property Name="Extension" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>FormatFileName</Name>
              <Description>Generates a log filename based on the input timestamp.</Description>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PathPrefix</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Name" Description="The base name of the log file." />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>subject</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p3:StripSubstring" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Extension" Description="The file extension" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>csv</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}\{1}\{2}.{3}</Format>
                    <Selector>Item1,Item2,Item3,Item4</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="9" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="4" To="9" Label="Source3" />
                  <Edge From="5" To="9" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source4" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Selector" />
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>../temp_data\sub-OneShotAruco\ses-001_date-2026-07-22T13-07-16\subject-cam\subject-cam.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>true</io:IncludeHeader>
              <io:Selector>Seconds</io:Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="5" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="5" Label="Source2" />
            <Edge From="4" To="5" Label="Source3" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DetectMarkers</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:WithLatestTimestamp.bonsai">
        <Name>BehaviorEvents</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2.Seconds</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1.Seconds</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Subtract" />
      <Expression xsi:type="GroupWorkflow">
        <Name>LogData</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" />
              <Property Name="Extension" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>FormatFileName</Name>
              <Description>Generates a log filename based on the input timestamp.</Description>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PathPrefix</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Name" Description="The base name of the log file." />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>markers</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p3:StripSubstring" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Extension" Description="The file extension" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>csv</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}\{1}\{2}.{3}</Format>
                    <Selector>Item1,Item2,Item3,Item4</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="9" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="4" To="9" Label="Source3" />
                  <Edge From="5" To="9" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source4" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Selector" />
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>../temp_data\sub-OneShotAruco\ses-001_date-2026-07-22T13-10-25\markers\markers.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>true</io:IncludeHeader>
              <io:Selector>it</io:Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="5" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="5" Label="Source2" />
            <Edge From="4" To="5" Label="Source3" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>BehaviorEvents</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="UclOpen.Logging:LogHarpDevice.bonsai">
        <LogName>Behavior</LogName>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RigSchema</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>SubjectCamera.CalibrationFile</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:LoadIntrinsics">
          <cv:FileName>./intrinsics/camera_25224819/2026-7-16/2026-7-16T15-11-48_intrinsics.yml</cv:FileName>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>BehaviorEvents</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:CreateTimestamped" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LogData</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" />
              <Property Name="Extension" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>FormatFileName</Name>
              <Description>Generates a log filename based on the input timestamp.</Description>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PathPrefix</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Name" Description="The base name of the log file." />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>intrinsics</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p3:StripSubstring" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Extension" Description="The file extension" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>csv</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}\{1}\{2}.{3}</Format>
                    <Selector>Item1,Item2,Item3,Item4</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="9" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="4" To="9" Label="Source3" />
                  <Edge From="5" To="9" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source4" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Selector" />
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>../temp_data\sub-OneShotAruco\ses-001_date-2026-07-22T13-10-25\intrinsics\intrinsics.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>true</io:IncludeHeader>
              <io:Selector>Seconds,Value.ImageSize.Value,Value.FocalLength,Value.PrincipalPoint,Value.RadialDistortion,Value.TangentialDistortion,Value.FovY</io:Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="5" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="5" Label="Source2" />
            <Edge From="4" To="5" Label="Source3" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RigSchema</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:SerializeToJson">
          <p1:Formatting>Indented</p1:Formatting>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="UclOpen.Logging:LogDataSchema.bonsai">
        <Name>RigSchema</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="27" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="27" Label="Source2" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source3" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="33" To="37" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="36" To="37" Label="Source2" />
      <Edge From="36" To="42" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="37" To="39" Label="Source1" />
      <Edge From="38" To="40" Label="Source1" />
      <Edge From="39" To="40" Label="Source2" />
      <Edge From="40" To="41" Label="Source1" />
      <Edge From="43" To="44" Label="Source1" />
      <Edge From="45" To="46" Label="Source1" />
      <Edge From="46" To="47" Label="Source1" />
      <Edge From="47" To="48" Label="Source1" />
      <Edge From="48" To="50" Label="Source1" />
      <Edge From="49" To="50" Label="Source2" />
      <Edge From="50" To="51" Label="Source1" />
      <Edge From="51" To="52" Label="Source1" />
      <Edge From="53" To="54" Label="Source1" />
      <Edge From="54" To="55" Label="Source1" />
      <Edge From="55" To="56" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>