<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:UclOpenFreeingVisionBenchmark;assembly=Extensions"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:gui="clr-namespace:Bonsai.Gui;assembly=Bonsai.Gui"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="RigPath" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ReadSchemas</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Path" DisplayName="RigPath" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:ReadAllText">
                <io:Path>..\local\IntrinsicsCalibrationRig.json</io:Path>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RawRigSchema</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RawRigSchema</Name>
      </Expression>
      <Expression xsi:type="p1:DeserializeFromJson">
        <p1:Type xsi:type="TypeMapping" TypeArguments="p1:IntrinsicsCalibrationRig" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>RigSchema</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>1920</gl:Width>
          <gl:Height>1080</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Transparent</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Fullscreen</gl:WindowState>
          <gl:DisplayDevice>Second</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawCheckerboard.bonsai">
        <ExtentX>2</ExtentX>
        <ExtentY>1.6</ExtentY>
        <LocationX>0</LocationX>
        <LocationY>0</LocationY>
        <Layer>0</Layer>
        <Angle>0</Angle>
        <NumberColumns>10</NumberColumns>
        <NumberRows>8</NumberRows>
        <Phase>0</Phase>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>1</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>ImageStream</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>Space</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Unit" />
      <Expression xsi:type="SubscribeSubject">
        <Name>DoSample</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Sample" />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>SampledImage</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>10</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:ToArray" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindChessboardCorners">
          <cv:PatternSize>
            <cv:Width>9</cv:Width>
            <cv:Height>7</cv:Height>
          </cv:PatternSize>
          <cv:CalibrationFlags>AdaptiveThreshold NormalizeImage FastCheck</cv:CalibrationFlags>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>FindChessboard</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>10</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:ToArray" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CalibrateCameraChessboard">
          <cv:PatternSize>
            <cv:Width>9</cv:Width>
            <cv:Height>7</cv:Height>
          </cv:PatternSize>
          <cv:CalibrationFlags>None</cv:CalibrationFlags>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.UtcDateTime</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RigSchema</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Camera.SerialNumber</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Format">
        <Format>intrinsics/camera_{6}/{0}-{1}-{2}/{0}-{1}-{2}T{3}-{4}-{5}_intrinsics.yml</Format>
        <Selector>Item1.Year,Item1.Month,Item1.Day,Item1.Hour,Item1.Minute,Item1.Second,Item2</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="InputMapping">
        <PropertyMappings>
          <Property Name="FileName" Selector="Item2" />
        </PropertyMappings>
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:SaveIntrinsics">
          <cv:FileName>intrinsics/camera_25224819/2026-7-15/2026-7-15T10-24-42_intrinsics.yml</cv:FileName>
          <cv:Suffix>None</cv:Suffix>
        </Combinator>
      </Expression>
      <Expression xsi:type="gui:ButtonBuilder">
        <gui:Name>Sample</gui:Name>
        <gui:Enabled>true</gui:Enabled>
        <gui:Visible>true</gui:Visible>
        <gui:Text>Sample</gui:Text>
      </Expression>
      <Expression xsi:type="Unit" />
      <Expression xsi:type="rx:PublishSubject">
        <Name>DoSample</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ImageStream</Name>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="gui:TableLayoutPanelBuilder">
        <gui:Enabled>true</gui:Enabled>
        <gui:Visible>true</gui:Visible>
        <gui:ColumnCount>1</gui:ColumnCount>
        <gui:RowCount>4</gui:RowCount>
        <gui:ColumnStyles />
        <gui:RowStyles />
        <gui:CellSpans>
          <gui:CellSpan ColumnSpan="1" RowSpan="3" />
          <gui:CellSpan ColumnSpan="1" RowSpan="1" />
        </gui:CellSpans>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="SubscribeSubject">
        <Name>SampledImage</Name>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="SubscribeSubject">
        <Name>FindChessboard</Name>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="gui:TableLayoutPanelBuilder">
        <gui:Name>CollectionVisualizer</gui:Name>
        <gui:Enabled>true</gui:Enabled>
        <gui:Visible>true</gui:Visible>
        <gui:ColumnCount>3</gui:ColumnCount>
        <gui:RowCount>1</gui:RowCount>
        <gui:ColumnStyles />
        <gui:RowStyles />
        <gui:CellSpans>
          <gui:CellSpan ColumnSpan="1" RowSpan="3" />
          <gui:CellSpan ColumnSpan="1" RowSpan="1" />
        </gui:CellSpans>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="18" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="17" Label="Source1" />
      <Edge From="16" To="17" Label="Source2" />
      <Edge From="17" To="18" Label="Source2" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="28" To="30" Label="Source1" />
      <Edge From="29" To="35" Label="Source1" />
      <Edge From="30" To="33" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="32" To="33" Label="Source2" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="35" Label="Source2" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="38" To="39" Label="Source1" />
      <Edge From="38" To="43" Label="Source1" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="41" To="42" Label="Source1" />
      <Edge From="42" To="44" Label="Source1" />
      <Edge From="43" To="44" Label="Source2" />
      <Edge From="44" To="45" Label="Source1" />
      <Edge From="45" To="50" Label="Source1" />
      <Edge From="46" To="47" Label="Source1" />
      <Edge From="47" To="50" Label="Source2" />
      <Edge From="48" To="49" Label="Source1" />
      <Edge From="49" To="50" Label="Source3" />
    </Edges>
  </Workflow>
</WorkflowBuilder>