<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:UclOpenFreeingVisionBenchmark;assembly=Extensions"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:aruco="clr-namespace:Bonsai.Aruco;assembly=Bonsai.Aruco"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="RigPath" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ReadSchemas</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Path" DisplayName="RigPath" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:ReadAllText">
                <io:Path>C:\Users\erski\source\repos\freeing-vision-benchmark\local\UclOpenFreeingVisionBenchmarkRigDebugModel.json</io:Path>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RawRigSchema</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LoadSchemas</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawRigSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:UclOpenFreeingVisionBenchmarkRigDebugModel" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RigSchema</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Screen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Width" Selector="Screen.WindowWidth" />
                <Property Name="Height" Selector="Screen.WindowHeight" />
                <Property Name="TargetRenderFrequency" Selector="Screen.TargetRenderFrequency" />
                <Property Name="TargetUpdateFrequency" Selector="Screen.TargetUpdateFrequency" />
                <Property Name="DisplayDevice" Selector="Screen.DisplayIndex" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateWindow">
                <gl:Width>2560</gl:Width>
                <gl:Height>1600</gl:Height>
                <gl:VSync>Off</gl:VSync>
                <gl:SwapSync>false</gl:SwapSync>
                <gl:ClearColor>White</gl:ClearColor>
                <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                <gl:CursorVisible>true</gl:CursorVisible>
                <gl:Location xsi:nil="true" />
                <gl:WindowBorder>Resizable</gl:WindowBorder>
                <gl:WindowState>Fullscreen</gl:WindowState>
                <gl:DisplayDevice>First</gl:DisplayDevice>
                <gl:TargetRenderFrequency>360</gl:TargetRenderFrequency>
                <gl:TargetUpdateFrequency>360</gl:TargetUpdateFrequency>
                <gl:RenderState />
                <gl:GraphicsMode>
                  <gl:ColorFormat>
                    <gl:Red>8</gl:Red>
                    <gl:Green>8</gl:Green>
                    <gl:Blue>8</gl:Blue>
                    <gl:Alpha>8</gl:Alpha>
                  </gl:ColorFormat>
                  <gl:Depth>16</gl:Depth>
                  <gl:Stencil>0</gl:Stencil>
                  <gl:Samples>0</gl:Samples>
                  <gl:AccumulatorFormat>
                    <gl:Red>0</gl:Red>
                    <gl:Green>0</gl:Green>
                    <gl:Blue>0</gl:Blue>
                    <gl:Alpha>0</gl:Alpha>
                  </gl:AccumulatorFormat>
                  <gl:Buffers>2</gl:Buffers>
                  <gl:Stereo>false</gl:Stereo>
                </gl:GraphicsMode>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:TextureResources">
                <gl:Textures>
                  <gl:TextureConfiguration xsi:type="gl:ImageTexture">
                    <gl:Name>aruco-1</gl:Name>
                    <gl:Width xsi:nil="true" />
                    <gl:Height xsi:nil="true" />
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Linear</gl:MinFilter>
                    <gl:MagFilter>Linear</gl:MagFilter>
                    <gl:FileName>..\markers\aruco-1-100.png</gl:FileName>
                    <gl:ColorType>Unchanged</gl:ColorType>
                    <gl:FlipMode>Vertical</gl:FlipMode>
                  </gl:TextureConfiguration>
                  <gl:TextureConfiguration xsi:type="gl:ImageTexture">
                    <gl:Name>aruco-2</gl:Name>
                    <gl:Width xsi:nil="true" />
                    <gl:Height xsi:nil="true" />
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Linear</gl:MinFilter>
                    <gl:MagFilter>Linear</gl:MagFilter>
                    <gl:FileName>..\markers\aruco-2-100.png</gl:FileName>
                    <gl:ColorType>Unchanged</gl:ColorType>
                    <gl:FlipMode>Vertical</gl:FlipMode>
                  </gl:TextureConfiguration>
                  <gl:TextureConfiguration xsi:type="gl:ImageTexture">
                    <gl:Name>aruco-100</gl:Name>
                    <gl:Width xsi:nil="true" />
                    <gl:Height xsi:nil="true" />
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Linear</gl:MinFilter>
                    <gl:MagFilter>Linear</gl:MagFilter>
                    <gl:FileName>..\markers\aruco-100-100.png</gl:FileName>
                    <gl:ColorType>Unchanged</gl:ColorType>
                    <gl:FlipMode>Vertical</gl:FlipMode>
                  </gl:TextureConfiguration>
                  <gl:TextureConfiguration xsi:type="gl:ImageTexture">
                    <gl:Name>aruco-199</gl:Name>
                    <gl:Width xsi:nil="true" />
                    <gl:Height xsi:nil="true" />
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Linear</gl:MinFilter>
                    <gl:MagFilter>Linear</gl:MagFilter>
                    <gl:FileName>..\markers\aruco-199-100.png</gl:FileName>
                    <gl:ColorType>Unchanged</gl:ColorType>
                    <gl:FlipMode>Vertical</gl:FlipMode>
                  </gl:TextureConfiguration>
                </gl:Textures>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="res:LoadResources" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RenderFrame" />
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>RenderFrame</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.CubemapView.bonsai">
              <Eye>
                <X>0</X>
                <Y>0</Y>
                <Z>0</Z>
              </Eye>
              <NearClip>0.1</NearClip>
              <FarClip>200</FarClip>
              <Light>
                <X>0</X>
                <Y>0</Y>
                <Z>0</Z>
              </Light>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>DrawCall</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RenderCubemap">
                <gl:RenderState />
                <gl:ClearColor>White</gl:ClearColor>
                <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                <gl:FaceSize xsi:nil="true" />
                <gl:InternalFormat>Rgb</gl:InternalFormat>
                <gl:MinFilter>Linear</gl:MinFilter>
                <gl:MagFilter>Linear</gl:MagFilter>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Aruco1.ViewWidth</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Width" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Aruco1.ViewHeight</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Height" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ViewOffset</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Rotation" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Translation" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
              <Width>0.344626516</Width>
              <Height>0.215391576</Height>
              <Rotation>
                <X>NaN</X>
                <Y>NaN</Y>
                <Z>NaN</Z>
              </Rotation>
              <Translation>
                <X>0</X>
                <Y>0</Y>
                <Z>0</Z>
              </Translation>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
              <X>0</X>
              <Y>0</Y>
              <Width>1</Width>
              <Height>1</Height>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>PostDrawing</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawCall</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawModel.bonsai">
              <TranslationX>0</TranslationX>
              <TranslationY>0</TranslationY>
              <TranslationZ>2</TranslationZ>
              <RotationZ>0</RotationZ>
              <RotationY>0</RotationY>
              <RotationX>0</RotationX>
              <ScaleX>0.35</ScaleX>
              <ScaleY>0.35</ScaleY>
              <ScaleZ>1</ScaleZ>
              <Ambient>
                <X>0</X>
                <Y>0</Y>
                <Z>0</Z>
              </Ambient>
              <Diffuse>
                <X>0.8</X>
                <Y>0.8</Y>
                <Z>0.8</Z>
              </Diffuse>
              <Specular>
                <X>0.8</X>
                <Y>0.8</Y>
                <Z>0.8</Z>
              </Specular>
              <SpecularExponent>10</SpecularExponent>
              <MeshName>Plane</MeshName>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PostDrawing</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Aruco1.ExtentY</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ExtentX" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Aruco1.ExtentY</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ExtentY" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Aruco1.OffsetX</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="LocationX" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Aruco1.OffsetY</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="LocationY" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawImage.bonsai">
              <TextureName>aruco-2</TextureName>
              <ExtentX>0.4642707</ExtentX>
              <ExtentY>0.4642707</ExtentY>
              <LocationX>0.9285414</LocationX>
              <LocationY>0.742833138</LocationY>
              <Layer>0</Layer>
              <Angle>0</Angle>
              <ScaleX>1</ScaleX>
              <ScaleY>1</ScaleY>
              <ShiftX>0</ShiftX>
              <ShiftY>0</ShiftY>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>PostDrawing</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
                <ExtentX>0.02</ExtentX>
                <ExtentY>0.02</ExtentY>
                <LocationX>0</LocationX>
                <LocationY>0</LocationY>
                <Layer>0</Layer>
                <Angle>0</Angle>
                <ColorR>0</ColorR>
                <ColorG>0</ColorG>
                <ColorB>0</ColorB>
                <ColorA>1</ColorA>
              </Builder>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="23" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="23" Label="Source2" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="23" Label="Source3" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="18" To="21" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="23" Label="Source4" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source5" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="41" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="30" To="33" Label="Source1" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="32" To="41" Label="Source2" />
            <Edge From="33" To="34" Label="Source1" />
            <Edge From="34" To="41" Label="Source3" />
            <Edge From="35" To="36" Label="Source1" />
            <Edge From="36" To="37" Label="Source1" />
            <Edge From="37" To="41" Label="Source4" />
            <Edge From="38" To="39" Label="Source1" />
            <Edge From="39" To="40" Label="Source1" />
            <Edge From="40" To="41" Label="Source5" />
            <Edge From="42" To="43" Label="Source1" />
            <Edge From="43" To="44" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>1</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="aruco:DetectMarkers">
          <aruco:CameraParameters>intrinsics\2026-10-12\2026-10-12T15-14-22_intrinsics.yml</aruco:CameraParameters>
          <aruco:ThresholdMethod>AdaptiveThreshold</aruco:ThresholdMethod>
          <aruco:Param1>6</aruco:Param1>
          <aruco:Param2>5</aruco:Param2>
          <aruco:MinSize>0.005</aruco:MinSize>
          <aruco:MaxSize>0.5</aruco:MaxSize>
          <aruco:CornerRefinement>Lines</aruco:CornerRefinement>
          <aruco:MarkerSize>0.05</aruco:MarkerSize>
          <aruco:SetYPerpendicular>false</aruco:SetYPerpendicular>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="aruco:SelectMarker">
          <aruco:Id>1</aruco:Id>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="aruco:MarkerViewMatrix" />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Marker1</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="aruco:SelectMarker">
          <aruco:Id>2</aruco:Id>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="aruco:MarkerViewMatrix" />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Marker2</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Markers</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Markers</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:Invert" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Multiply" />
      <Expression xsi:type="SubscribeSubject">
        <Name>RigSchema</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Aruco1.Offset</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>X</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Y</Selector>
      </Expression>
      <Expression xsi:type="Multiply">
        <Operand xsi:type="DoubleProperty">
          <Value>-1</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="InputMapping">
        <PropertyMappings>
          <Property Name="Y" Selector="Item1" />
          <Property Name="X" Selector="Item2" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateVector3">
          <gl:X>-0.08</gl:X>
          <gl:Y>0.1</gl:Y>
          <gl:Z>0</gl:Z>
        </Combinator>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Position" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:TransformRelative">
          <gl:Order>Append</gl:Order>
          <gl:Position>
            <gl:X>-0.08</gl:X>
            <gl:Y>0.1</gl:Y>
            <gl:Z>0</gl:Z>
          </gl:Position>
          <gl:Rotation>
            <gl:Xyz>
              <gl:X>0</gl:X>
              <gl:Y>0</gl:Y>
              <gl:Z>0</gl:Z>
            </gl:Xyz>
            <gl:W>1</gl:W>
          </gl:Rotation>
          <gl:Scale>
            <gl:X>1</gl:X>
            <gl:Y>1</gl:Y>
            <gl:Z>1</gl:Z>
          </gl:Scale>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RotateY">
          <gl:Order>Prepend</gl:Order>
          <gl:Angle>-1.57079637</gl:Angle>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RotateZ">
          <gl:Order>Prepend</gl:Order>
          <gl:Angle>-1.57079637</gl:Angle>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:Invert" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RotateZ">
          <gl:Order>Prepend</gl:Order>
          <gl:Angle>1.57079637</gl:Angle>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:ExtrinsicsTransform" />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>ViewOffset</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="5" To="9" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="12" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source2" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="14" To="16" Label="Source1" />
      <Edge From="15" To="18" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source2" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="29" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="21" To="23" Label="Source1" />
      <Edge From="22" To="25" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source2" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source2" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>