<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:UclOpenFreeingVisionBenchmark;assembly=Extensions"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="RigPath" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ReadSchemas</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Path" DisplayName="RigPath" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:ReadAllText">
                <io:Path>C:\Users\erski\source\repos\freeing-vision-benchmark\local\UclOpenFreeingVisionBenchmarkRigDebugModel.json</io:Path>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RawRigSchema</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LoadSchemas</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawRigSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:UclOpenFreeingVisionBenchmarkRigDebugModel" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RigSchema</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Screen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Width" Selector="Screen.WindowWidth" />
                <Property Name="Height" Selector="Screen.WindowHeight" />
                <Property Name="TargetRenderFrequency" Selector="Screen.TargetRenderFrequency" />
                <Property Name="TargetUpdateFrequency" Selector="Screen.TargetUpdateFrequency" />
                <Property Name="DisplayDevice" Selector="Screen.DisplayIndex" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateWindow">
                <gl:Width>2560</gl:Width>
                <gl:Height>1600</gl:Height>
                <gl:VSync>Off</gl:VSync>
                <gl:SwapSync>false</gl:SwapSync>
                <gl:ClearColor>White</gl:ClearColor>
                <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                <gl:CursorVisible>true</gl:CursorVisible>
                <gl:Location xsi:nil="true" />
                <gl:WindowBorder>Resizable</gl:WindowBorder>
                <gl:WindowState>Fullscreen</gl:WindowState>
                <gl:DisplayDevice>Second</gl:DisplayDevice>
                <gl:TargetRenderFrequency>360</gl:TargetRenderFrequency>
                <gl:TargetUpdateFrequency>360</gl:TargetUpdateFrequency>
                <gl:RenderState />
                <gl:GraphicsMode>
                  <gl:ColorFormat>
                    <gl:Red>8</gl:Red>
                    <gl:Green>8</gl:Green>
                    <gl:Blue>8</gl:Blue>
                    <gl:Alpha>8</gl:Alpha>
                  </gl:ColorFormat>
                  <gl:Depth>16</gl:Depth>
                  <gl:Stencil>0</gl:Stencil>
                  <gl:Samples>0</gl:Samples>
                  <gl:AccumulatorFormat>
                    <gl:Red>0</gl:Red>
                    <gl:Green>0</gl:Green>
                    <gl:Blue>0</gl:Blue>
                    <gl:Alpha>0</gl:Alpha>
                  </gl:AccumulatorFormat>
                  <gl:Buffers>2</gl:Buffers>
                  <gl:Stereo>false</gl:Stereo>
                </gl:GraphicsMode>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:TextureResources">
                <gl:Textures>
                  <gl:TextureConfiguration xsi:type="gl:ImageTexture">
                    <gl:Name>aruco-1</gl:Name>
                    <gl:Width xsi:nil="true" />
                    <gl:Height xsi:nil="true" />
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Linear</gl:MinFilter>
                    <gl:MagFilter>Linear</gl:MagFilter>
                    <gl:FileName>..\markers\aruco-1-100.png</gl:FileName>
                    <gl:ColorType>Unchanged</gl:ColorType>
                    <gl:FlipMode>Vertical</gl:FlipMode>
                  </gl:TextureConfiguration>
                  <gl:TextureConfiguration xsi:type="gl:ImageTexture">
                    <gl:Name>aruco-2</gl:Name>
                    <gl:Width xsi:nil="true" />
                    <gl:Height xsi:nil="true" />
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Linear</gl:MinFilter>
                    <gl:MagFilter>Linear</gl:MagFilter>
                    <gl:FileName>..\markers\aruco-2-100.png</gl:FileName>
                    <gl:ColorType>Unchanged</gl:ColorType>
                    <gl:FlipMode>Vertical</gl:FlipMode>
                  </gl:TextureConfiguration>
                  <gl:TextureConfiguration xsi:type="gl:ImageTexture">
                    <gl:Name>aruco-100</gl:Name>
                    <gl:Width xsi:nil="true" />
                    <gl:Height xsi:nil="true" />
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Linear</gl:MinFilter>
                    <gl:MagFilter>Linear</gl:MagFilter>
                    <gl:FileName>..\markers\aruco-100-100.png</gl:FileName>
                    <gl:ColorType>Unchanged</gl:ColorType>
                    <gl:FlipMode>Vertical</gl:FlipMode>
                  </gl:TextureConfiguration>
                  <gl:TextureConfiguration xsi:type="gl:ImageTexture">
                    <gl:Name>aruco-199</gl:Name>
                    <gl:Width xsi:nil="true" />
                    <gl:Height xsi:nil="true" />
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Linear</gl:MinFilter>
                    <gl:MagFilter>Linear</gl:MagFilter>
                    <gl:FileName>..\markers\aruco-199-100.png</gl:FileName>
                    <gl:ColorType>Unchanged</gl:ColorType>
                    <gl:FlipMode>Vertical</gl:FlipMode>
                  </gl:TextureConfiguration>
                </gl:Textures>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="res:LoadResources" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RenderFrame" />
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>RenderFrame</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.CubemapView.bonsai">
              <Eye>
                <X>0</X>
                <Y>0</Y>
                <Z>0</Z>
              </Eye>
              <NearClip>0.1</NearClip>
              <FarClip>200</FarClip>
              <Light>
                <X>0</X>
                <Y>0</Y>
                <Z>0</Z>
              </Light>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>DrawCall</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RenderCubemap">
                <gl:RenderState />
                <gl:ClearColor>White</gl:ClearColor>
                <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                <gl:FaceSize xsi:nil="true" />
                <gl:InternalFormat>Rgb</gl:InternalFormat>
                <gl:MinFilter>Linear</gl:MinFilter>
                <gl:MagFilter>Linear</gl:MagFilter>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
              <Width>0.596841</Width>
              <Height>0.335723042</Height>
              <Rotation>
                <X>NaN</X>
                <Y>NaN</Y>
                <Z>NaN</Z>
              </Rotation>
              <Translation>
                <X>0</X>
                <Y>0</Y>
                <Z>0</Z>
              </Translation>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
              <X>0</X>
              <Y>0</Y>
              <Width>1</Width>
              <Height>1</Height>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>PostDrawing</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PostDrawing</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Aruco1.ExtentY</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ExtentX" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Aruco1.ExtentY</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ExtentY" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Aruco1.OffsetX</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="LocationX" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Aruco1.OffsetY</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="LocationY" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawImage.bonsai">
              <TextureName>aruco-2</TextureName>
              <ExtentX>0.4642707</ExtentX>
              <ExtentY>0.4642707</ExtentY>
              <LocationX>0.4642707</LocationX>
              <LocationY>0.4642707</LocationY>
              <Layer>0</Layer>
              <Angle>0</Angle>
              <ScaleX>1</ScaleX>
              <ScaleY>1</ScaleY>
              <ShiftX>0</ShiftX>
              <ShiftY>0</ShiftY>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PostDrawing</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Aruco2.ExtentY</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ExtentX" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Aruco2.ExtentY</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ExtentY" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Aruco2.OffsetX</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="LocationX" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Aruco2.OffsetY</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="LocationY" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawImage.bonsai">
              <TextureName>aruco-1</TextureName>
              <ExtentX>0.4642707</ExtentX>
              <ExtentY>0.4642707</ExtentY>
              <LocationX>-0.4642707</LocationX>
              <LocationY>-0.4642707</LocationY>
              <Layer>0</Layer>
              <Angle>0</Angle>
              <ScaleX>1</ScaleX>
              <ScaleY>1</ScaleY>
              <ShiftX>0</ShiftX>
              <ShiftY>0</ShiftY>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PostDrawing</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>0.02</ExtentX>
              <ExtentY>0.02</ExtentY>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>0</Layer>
              <Angle>0</Angle>
              <ColorR>0</ColorR>
              <ColorG>0</ColorG>
              <ColorB>0</ColorB>
              <ColorA>1</ColorA>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="28" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="17" To="20" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="28" Label="Source2" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="28" Label="Source3" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="28" Label="Source4" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="28" Label="Source5" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="42" Label="Source1" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="31" To="34" Label="Source1" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="33" To="42" Label="Source2" />
            <Edge From="34" To="35" Label="Source1" />
            <Edge From="35" To="42" Label="Source3" />
            <Edge From="36" To="37" Label="Source1" />
            <Edge From="37" To="38" Label="Source1" />
            <Edge From="38" To="42" Label="Source4" />
            <Edge From="39" To="40" Label="Source1" />
            <Edge From="40" To="41" Label="Source1" />
            <Edge From="41" To="42" Label="Source5" />
            <Edge From="43" To="44" Label="Source1" />
            <Edge From="44" To="45" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>