<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:sleap="clr-namespace:Bonsai.Sleap;assembly=Bonsai.Sleap"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:FileCapture">
            <cv:FileName>C:\Users\Saleem Lab\source\repos\freeing-vision-benchmark\temp_data\sub-Tracking\ses-001_date-2026-07-23T09-05-47\TrackCamera\TrackCamera.avi</cv:FileName>
            <cv:PlaybackRate>50000</cv:PlaybackRate>
            <cv:StartPosition>0</cv:StartPosition>
            <cv:PositionUnits>Frames</cv:PositionUnits>
            <cv:Loop>false</cv:Loop>
            <cv:Playing>true</cv:Playing>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:Grayscale" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="sleap:PredictSinglePose">
            <sleap:ModelFileName>C:\Users\Saleem Lab\source\repos\freeing-vision-benchmark\models\track_model\models\260805_145212.single_instance.n=18\exports\model.onnx</sleap:ModelFileName>
            <sleap:PartMinConfidence>0.0697674453</sleap:PartMinConfidence>
            <sleap:InputSize xsi:nil="true" />
            <sleap:ColorConversion xsi:nil="true" />
            <sleap:ExecutionProvider>TensorRT</sleap:ExecutionProvider>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:TimeInterval" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Interval.TotalSeconds</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:TimeInterval" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Interval.TotalSeconds</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FileCapture">
          <cv:FileName>C:\Users\Saleem Lab\source\repos\freeing-vision-benchmark\temp_data\quick-acq\track_camera.avi</cv:FileName>
          <cv:PlaybackRate>50000</cv:PlaybackRate>
          <cv:StartPosition>0</cv:StartPosition>
          <cv:PositionUnits>Frames</cv:PositionUnits>
          <cv:Loop>false</cv:Loop>
          <cv:Playing>true</cv:Playing>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="sleap:PredictSinglePose">
          <sleap:ModelFileName>C:\Users\Saleem Lab\source\repos\freeing-vision-benchmark\models\track_model_reduced\models\260819_152057.single_instance.n=60\exports\model.onnx</sleap:ModelFileName>
          <sleap:PartMinConfidence>0.5</sleap:PartMinConfidence>
          <sleap:InputSize xsi:nil="true" />
          <sleap:ColorConversion xsi:nil="true" />
          <sleap:ExecutionProvider>TensorRT</sleap:ExecutionProvider>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TimeInterval" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Interval.TotalSeconds</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TimeInterval" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Interval.TotalSeconds</Selector>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="5" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="7" To="12" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>